PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
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Routines
  Routine trial
    CodeComponent code2
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        letters = [chr(i) for i in range(ord('A'), ord('Z')+1)]
      Begin Routine:
        # 初始化target和corrAns
        target = eval("target" + str(n))
        corrAns = eval("corrAns" + str(n))


        thisLetter = np.random.choice(letters)
        letterSelected = False # a boolean to state a letter has not yet been selected
        if not target: # this is not a target trial
                while not letterSelected: # repeat the content of this loop until a letter is selected
                    thisLetter = np.random.choice(letters)# if this is not a target then randomly choose
                    if len(presentedLetters) < n or thisLetter != presentedLetters[-n]: # if n letters have not yet been presented, or this is not the same as the n-th trial back
                        letterSelected = True # accept this as the chosen letter
        else:
                thisLetter = presentedLetters[-n]# if this was a target choose the n'th back
        presentedLetters.append(thisLetter)
      End Routine:
        thisExp.addData("corrAns", corrAns)

        if resp_Letter.corr == 1 and target == 1:
            NumTarget += 1

        if resp_Letter.corr == 1 and target == 0:
            NumNonTarget += 1

        if target == 1:
            NumTar += 1
        else:
            NumNonTar += 1
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent letter
      color [set every repeat] = $color_Diff
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $thisLetter
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    KeyboardComponent resp_Letter
      allowedKeys = 'n','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine instr
    TextComponent guide
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        2-back
        ture : m
        false: n
    KeyboardComponent resp_guide
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback2block
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        rate_T = NumTarget / NumTar
        rate_NT = NumNonTarget / NumNonTar

        feedback = "你完成靶子任务的正确率为：" + str(round(rate_T*100,2)) + "%\n你完成非靶子任务的正确率为：" + str(round(rate_NT*100,2)) + "%"
    TextComponent FB
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback
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    KeyboardComponent resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine newBlock
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        n = Lv_Diff # first specify the n condition of the trial/block
        presentedLetters = [0]*n

        # 初始化正确计数器
        NumTarget = 0
        NumNonTarget = 0

        # 初始化Target/NonTarget计数器
        NumTar = 0
        NumNonTar = 0
    TextComponent block_instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = block instrution
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    KeyboardComponent resp_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Endexp
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thanks for participation!
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    KeyboardComponent resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator blocks loopType="TrialHandler"
    Selected rows = 5
    conditionsFile = con_block.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Lv_Diff': 1, 'color_Diff': 'black'},
      {'Lv_Diff': 2, 'color_Diff': 'red'},
      {'Lv_Diff': 3, 'color_Diff': 'blue'},
      {'Lv_Diff': 4, 'color_Diff': 'purple'},
      {'Lv_Diff': 5, 'color_Diff': 'green'},
      {'Lv_Diff': 6, 'color_Diff': 'brown'}]
    Routine newBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = con_back.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'index1': 0, 'target1': 0, 'corrAns1': 'n', 'index2': 0, 'target2': 0, 'corrAns2': 'n', 'index3': 0, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.8264033368705054, 'target1': 0, 'corrAns1': 'n', 'index2': 0, 'target2': 0, 'corrAns2': 'n', 'index3': 0, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.9420381248119059, 'target1': 0, 'corrAns1': 'n', 'index2': 0.12790102811259396, 'target2': 0, 'corrAns2': 'n', 'index3': 0, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.6142119956358804, 'target1': 0, 'corrAns1': 'n', 'index2': 0.4588054137313483, 'target2': 0, 'corrAns2': 'n', 'index3': 0.625200917017825, 'target3': 0, 'corrAns3': 'n', 'index4': 0, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'},
        {'index1': 0.40898944255208747, 'target1': 0, 'corrAns1': 'n', 'index2': 0.38343825641818563, 'target2': 0, 'corrAns2': 'n', 'index3': 0.36955183574386785, 'target3': 0, 'corrAns3': 'n', 'index4': 0.43676723659023897, 'target4': 0, 'corrAns4': 'n', 'index5': 0, 'target5': 0, 'corrAns5': 'n', 'index6': 0, 'target6': 0, 'corrAns6': 'n'}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
      Routine trial
    LoopTerminator trials
    Routine feedback2block
  LoopTerminator blocks
  Routine Endexp
