PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # 初始化价值
        value4low_red = 1
        value4low_blue = 1
        value4low_brown = 1
        value4low_purple = 1
        value4low_green = 1

        # 初始化价值变化单位
        unit_red = 1
        unit_blue = 1
        unit_brown = 1
        unit_purple = 1
        unit_green = 1

        # 初始化轮次
        round_red = 0
        round_blue = 0
        round_brown = 0
        round_purple = 0
        round_green = 0

        # 初始化按钮
        buttonText1 = 0
        buttonText2 = 0
        positions = [(-0.4, -0.12), (0.4, -0.12)]

        # 初始化选项记录
        Choices = list()
      Begin Routine:
        #设置选项文本
        buttonText1 = str(round(eval("value4low_" + colorName),2)) + "￥来完成\n一个黑色任务"



        buttonText2 = "2￥来完成\n一个" + color + "任务"

        # 设定位置，x小于0位于左侧
        random.shuffle(positions)
        position1 = positions[0]
        position2 = positions[1]
      End Routine:
        # 记录下button1的位置
        thisPosition = position1

        #记录下当前的颜色
        thisColor = colorName

        # 记录当前试次使用的单位
        thisUnit = eval("unit_" + colorName)

        # 设置该颜色下一轮使用的单位
        exec("unit_" + colorName + " = " + str(thisUnit/2))

        # 记录当前轮次value
        thisValue = eval("value4low_" + colorName)

        # 记录下此时被试选择了 high effort(2) or low effort(1)
        if thisPosition[0] < 0:
            if resp_CEP.keys == "n":
                preference = 1
            else:
                preference = 2
        else:
            if resp_CEP.keys == "m":
                preference = 1
            else:
                preference = 2





        #设置下一轮使用的LowEffort值
        if preference == 1:
            exec("value4low_" + colorName + "=" + str(thisValue + thisUnit/2))
            thisChoice = list(["黑色", thisValue])
        else:
            exec("value4low_" + colorName + "=" + str(thisValue - thisUnit/2))
            thisChoice = list([color, 2])

        resultvalue = eval("value4low_" + colorName)
        exec("round_" + colorName + "=" + str("round_" + colorName + " + 1"))
        rounds = eval("round_" + colorName)
        Choices.append(thisChoice)

        # 记录信息
        thisExp.addData("preference", preference)
        thisExp.addData("thisvalue", thisValue)
        thisExp.addData("round", rounds)
        thisExp.addData("result", resultvalue)
        thisExp.addData("choice", thisChoice)
    TextComponent question
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Which one is better?
      units = height
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    TextComponent button_1
      letterHeight = 0.08
      pos [set every repeat] = position1
      startVal [time (s)] = 0.0
      text [set every repeat] = $buttonText1
      units = height
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    TextComponent button_2
      letterHeight = 0.08
      pos [set every repeat] = position2
      startVal [time (s)] = 0.0
      text [set every repeat] = $buttonText2
      units = height
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    KeyboardComponent resp_CEP
      allowedKeys = 'n','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = press sace
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        f_choice = random.sample(Choices,1)

        endInstr = "随机抽选的结果为：\n" + "获得" + str(round(f_choice[0][1],2)) + "￥的" + str(f_choice[0][0]) + "任务"
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $endInstr
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    KeyboardComponent resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 2, 'color': '红色', 'colorName': 'red'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 3, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 4, 'color': '蓝色', 'colorName': 'blue'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 4, 'color': '紫色', 'colorName': 'purple'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 5, 'color': '绿色', 'colorName': 'green'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'},
      {'backs': 6, 'color': '棕色', 'colorName': 'brown'}]
    Routine trial
  LoopTerminator trials
  Routine end
